PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': '', 'session': '', 'run_number': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = regulation_of_craving
  logging level = debug
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Routines
  Routine trial
    PolygonComponent fixation
      durationEstim = 1
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (48, 48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_duration
      units = pix
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    PolygonComponent background
      fillColor [set every repeat] = $background_color
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_width, window_height)
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 11
      units = pix
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    PolygonComponent black_background
      fillColor = $[-1,-1,-1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_width - 150, window_height - 150)
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 11
      units = pix
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    TextComponent regulate_look
      font = Helvetica
      letterHeight = 0.075
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 2
      text [set every repeat] = $regulate_or_look
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    ImageComponent stimulus
      image [set every repeat] = $image_file
      startEstim = 3
      startVal [time (s)] = $jitter_duration + 2
      stopVal [duration (s)] = 5.0
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    TextComponent rating_text
      font = Helvetica
      letterHeight = 0.075
      pos = (0, 0.1)
      startEstim = 8
      startVal [time (s)] = $jitter_duration+7
      stopVal [duration (s)] = 4.0
      text = How much do you desire the item shown in the last picture?
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the rating buttons
        r = convert_key_to_rating(stim_keyboard.keys)
        stim_rating.markerPos = r
        # confirm rating by setting to current markerPos
        stim_rating.rating = r
    SliderComponent stim_rating
      font = Helvetica
      forceEndRoutine = False
      granularity = 0
      labels = ('No Desire', 'Strong Desire')
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.025)
      startEstim = 8
      startVal [time (s)] = $jitter_duration+7
      stopVal [duration (s)] = 4
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent stim_keyboard
      allowedKeys = '5', '6', '7', '8', '9'
      forceEndRoutine = False
      startEstim = 8
      startVal [time (s)] = $jitter_duration+7
      stopVal [duration (s)] = 4
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  Routine instructions
    TextComponent start_text
      durationEstim = 2
      font = Helvetica
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $start_text_duration
      text = $start_text_str
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    KeyboardComponent start_trigger
      allowedKeys = 'apostrophe'
      durationEstim = 2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $start_text_duration
      store = nothing
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  Routine end
    TextComponent end_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $end_text_duration
      text = $end_text_str
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = end_text_duration
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  Routine setup
    CodeComponent get_window_size
      Code Type = Both
      Begin Experiment:
        # Get window width and height
        window_width = win.clientSize[0]
        window_height = win.clientSize[1]
      Begin JS Experiment:
        window_width = psychoJS.window.size[[0];
        window_height = psychoJS.window.size[[1];
    CodeComponent get_conditions_file
      Code Type = Auto->JS
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      Before Experiment:
        rating_keys = ['5', '6', '7', '8', '9']


        def convert_key_to_rating(key):
            rating = None
            if key in rating_keys:
                rating = int(key)
                rating = rating - 4

            return rating
      Begin Experiment:
        participant = expInfo['participant']
        run_number = expInfo['run_number']
        is_first = True

        if is_first:
            start_text_str = 'Calibrating scanner'
            start_text_duration = 120
            end_text_str = 'The task has ended. The next task will start in a few seconds.'
            end_text_duration = 10
        else:
            start_text_str = ''
            start_text_duration = 0.1
            end_text_str = 'The task has ended. Waiting for researcher to start next task.'
            end_text_duration = 120


        conditions_file = 'conditions/ROC_' + participant + '_Session' + str(expInfo['session']) + '_Run' + str(run_number) + '.csv'
        # session 0 is a practice
        if expInfo['session'] == '0':
            start_text_str = 'Practice session for ROC task'
            start_text_duration = 20
            conditions_file = 'ROC_Practice.csv'
  Routine ratings
Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine end
